<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:GpioPinState" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val2</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TriggeredWindow">
          <rx:Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>WaterReachingBehavior\20220727_Light\Side.avi</cv:FileName>
                <cv:Suffix>FileCount</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>240</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:GpioPinState" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val3</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedFrameCounter</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>WaterReachingBehavior\20220727_Light\SideGPIO.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:CompatibilityMode>true</io:CompatibilityMode>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="9" Label="Source4" />
            <Edge From="7" To="9" Label="Source2" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>1</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:GpioPinState" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val2</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TriggeredWindow">
          <rx:Count xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>WaterReachingBehavior\20220727_Light\Front.avi</cv:FileName>
                <cv:Suffix>FileCount</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>240</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:GpioPinState" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val3</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedFrameCounter</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>WaterReachingBehavior\20220727_Light\FrontGPIO.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>FileCount</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:CompatibilityMode>true</io:CompatibilityMode>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="9" Label="Source4" />
            <Edge From="7" To="9" Label="Source2" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="6" Label="Source1" />
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="14" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>